'Combined Code for Reading Analog and Digital IRTs

'Declare Variables
Public Therm109_1370,Voltdif_1370  ' Analog IRT 1370
Public Therm109_1331,Voltdif_1331  ' Analog IRT 1331
Public BattV
Public Temp_1370
Public Temp_1331
Public TempC_target_1331
Public TempC_target_1370
Public IRT_TempC (2)
Public Quantam_Read
Public qt
Public GPSString As String * 100 'NMEA GPS string
Public ByteCount As Long 'number of characters in GPSString
Public GPSArr(15) As String 'array of GPSString component strings
Public Lon_WGS84,Lat_WGS84,HDOP 'longitude, latitude, horizontal dilution of precision


'Digital IRT computation variables
Public SBTempC As Float  ' Sensor body temp for Digital IRT
Public TargmV As Float  ' Target voltage for Digital IRT
Public m As Float  ' Slope for Digital IRT computation
Public b As Float  ' Intercept for Digital IRT computation
Public SBTempK As Float  ' Sensor body temp in Kelvin
Public TargTempK As Float  ' Target temp in Kelvin
Public TempC_target As Float  ' Target temperature in Celsius (Digital IRT)
Public TempC_body As Float  ' Sensor body temp (Digital IRT)

  'Analog Constants for IRT on 1370
  Const mC2_1370IRT = 90683.1  ' Placeholder for mC2 (A IRT)
  Const mC1_1370IRT = 9654350  ' Placeholder for mC1 (A IRT)
  Const mC0_1370IRT = 1759570000  ' Placeholder for mC0 (A IRT)
  Const bC2_1370IRT = 4206.67  ' Placeholder for bC2 (A IRT)
  Const bC1_1370IRT = 170835  ' Placeholder for bC1 (A IRT)
  Const bC0_1370IRT = 3066050  ' Placeholder for bC0 (A IRT)
  
  'Analog Constants for IRT on 1370
  Const mC2_1331IRT = 124225  ' Placeholder for mC2 (A IRT)
  Const mC1_1331IRT = 10282300  ' Placeholder for mC1 (A IRT)
  Const mC0_1331IRT = 1908990000  ' Placeholder for mC0 (A IRT)
  Const bC2_1331IRT = 3663.55  ' Placeholder for bC2 (A IRT)
  Const bC1_1331IRT = 157970  ' Placeholder for bC1 (A IRT)
  Const bC0_1331IRT = -2313070  ' Placeholder for bC0 (A IRT)
  

  'Digital Constants for IRT on C1
  Const mC2_IRT = 103951  ' Placeholder for mC2 (Digital IRT)
  Const mC1_IRT = 12114268  ' Placeholder for mC1 (Digital IRT)
  Const mC0_IRT = 1920373071  ' Placeholder for mC0 (Digital IRT)
  Const bC2_IRT = 3229  ' Placeholder for bC2 (Digital IRT)
  Const bC1_IRT = 115133  ' Placeholder for bC1 (Digital IRT)
  Const bC0_IRT = 5976462  ' Placeholder for bC0 (Digital IRT)

'IRT Analog and Digital Table
DataTable(IRT_Data, True, -1)
  DataInterval(0, 5,Sec, 0)  ' Log data every 5 seconds
  	Sample(1,Lon_WGS84,IEEE8)
	  Sample(1,Lat_WGS84,IEEE8)
	  Sample(1,HDOP,IEEE4)

  ' Record battery voltage
  Sample(1, BattV, IEEE4)

  ' Record analog IRT values
  Average(1, Therm109_1370, IEEE4, False)
  Average(1,Voltdif_1370, IEEE4, False)
  
  Average(1,Therm109_1331, IEEE4, False)
  Average(1,Voltdif_1331, IEEE4, False)

  ' Record digital IRT values (Target and Body Temperature)
  Sample(1, SBTempC, IEEE4)
  Sample(1, TargmV, IEEE4)
  Sample(1, TempC_target, IEEE4)
  Sample (1, Temp_1370,IEEE4)
  Sample(1, Temp_1331,IEEE4)
  Sample(1, TempC_target_1331 ,IEEE4)
  Sample(1, TempC_target_1370 ,IEEE4)
  Sample(1,Quantam_Read,IEEE4)
    Sample(1,qt,IEEE4)
  
EndTable

'Function for computing IRT target temperature (for Digital IRT)
Function ComputeIRTTemp(SBTempC As Float, TargmV As Float, mC2 As Float, mC1 As Float, mC0 As Float, bC2 As Float, bC1 As Float, bC0 As Float) As Float
  m = mC2 * SBTempC^2 + mC1 * SBTempC + mC0  
  b = bC2 * SBTempC^2 + bC1 * SBTempC + bC0
  SBTempK = SBTempC + 273.15
  TargTempK = ((SBTempK^4) + m * TargmV + b)^0.25
  ComputeIRTTemp = TargTempK - 273.15  ' Return temperature in Celsius
EndFunction

'Begin Program
BeginProg
 'Brown in C2; Black in G 
  SerialOpen(ComC1,57600,3,0,1000)
  
 Scan(1,Sec, 15, 0)  ' Scan every 2 seconds
   
	  SerialInRecord(ComC1,GPSString,&H24,0,&H0D0A,ByteCount,00)
    SplitStr(GPSArr(),GPSString,",",15,5)
     Lon_WGS84 = CTYPE(Left(GPSArr(5),3),IEEE8) + CTYPE(Right(GPSArr(5),Len(GPSArr(5))-3),IEEE8) / 60
   '  Lon_WGS84 = CTYPE(Left(GPSArr(5),3),String) + CTYPE(Right(GPSArr(5),Len(GPSArr(5))-3),String) / 60
    If GPSArr(6) = "W" Then
      Lon_WGS84 = -Lon_WGS84
    EndIf
    Lat_WGS84 = CTYPE(Left(GPSArr(3),2),IEEE8) + CTYPE(Right(GPSArr(3),Len(GPSArr(3))-2),IEEE8) / 60
   ' Lat_WGS84 = CTYPE(Left(GPSArr(3),2),String) + CTYPE(Right(GPSArr(3),Len(GPSArr(3))-2),String) / 60
    If GPSArr(4) = "S" Then
      Lat_WGS84 = -Lat_WGS84
    EndIf
    HDOP = GPSArr(9)
    If GPSArr(7) = "0" Then
      HDOP = -9999
    EndIf
    ' Measure battery voltage
    Battery(BattV)

    ' **** Analog IRT 1370 (SE3 and Diff1) ****
    Therm109(Therm109_1370, 1, 3, VX1, 0, _60Hz, 1, 0)  ' Measure sensor body temperature (Analog IRT)
    VoltDiff(Voltdif_1370, 1, mV5000, 1, True, 0, _60Hz, 1, 0)  ' Measure target voltage (Analog IRT)

    ' **** Analog IRT 1331 (SE7 and Diff3) ****
    Therm109(Therm109_1331, 1, 7, VX2, 0, _60Hz, 1, 0)  ' Measure sensor body temperature (Analog IRT)
    VoltDiff(Voltdif_1331, 1, mV5000, 3, True, 0, _60Hz, 1, 0)  ' Measure target voltage (Analog IRT)

    ' **** Digital IRT (connected to C1) ****
    SDI12Recorder(IRT_TempC(),C5, 1, "M2!", 1, 0)  ' Read target and body temperature (Digital IRT)
    SBTempC = IRT_TempC(2)  ' Sensor body temperature (Digital IRT)
    TargmV = IRT_TempC(1)  ' Target voltage (Digital IRT)

    ' Compute actual target temperature for Digital IRT
    TempC_target = ComputeIRTTemp(SBTempC, TargmV, mC2_IRT, mC1_IRT, mC0_IRT, bC2_IRT, bC1_IRT, bC0_IRT)
    'TempC_body = SBTempC  ' Assign the body temperature for Digital IRT
    
    ' Compute actual target temperature for Analog IRT 1370
    TempC_target_1370 = ComputeIRTTemp(Therm109_1370, Voltdif_1370, mC2_1370IRT, mC1_1370IRT, mC0_1370IRT, bC2_1370IRT, bC1_1370IRT, bC0_1370IRT)
    'TempC_body = SBTempC  ' Assign the body temperature for Digital IRT

    ' Compute actual target temperature for Analog IRT 1331
    TempC_target_1331 = ComputeIRTTemp(Therm109_1331, Voltdif_1331, mC2_1331IRT, mC1_1331IRT, mC0_1331IRT, bC2_1331IRT, bC1_1331IRT, bC0_1331IRT)
    'TempC_body = SBTempC  ' Assign the body temperature for Digital IRT
    ' Store the data
    
    ' **** Digital Quantum (connected to C1) ****
    VoltDiff(Quantam_Read, 1, mV5000, 5, True, 0, _60Hz, 1, 0)  ' Measure target voltage (Analog IRT)
    qt= Quantam_Read * 5
    
       
    CallTable IRT_Data

  NextScan
EndProg

